<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Logs a timestamped harp data stream into the base data log.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="LogName" Description="The base name of the data log, without extension." />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>LogHarp</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Data</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Data</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>MessageBytes</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Data</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>FormatFileName</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PathPrefix</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Name" Description="The base name of the log file." />
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="aeon:StripSubstring">
                      <aeon:Separator>_</aeon:Separator>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Extension" Description="The file extension" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>bin</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\{1}\{2}.{3}</Format>
                    <Selector>Item1,Item2,Item3,Item4</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="9" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="4" To="9" Label="Source3" />
                  <Edge From="5" To="9" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source4" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Suffix>Timestamp</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="8" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Switch" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>