<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Chunks and logs a timestamped video stream into the base data log.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="aeon:GroupByTime">
          <aeon:ChunkSize>24</aeon:ChunkSize>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="LogName" Description="The base name of the video log, without extension." />
        <Property Name="FrameRate" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>LogVideo</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Data</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Data</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Data</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>FormatFileName</Name>
              <Description>Generates a log filename based on the input timestamp.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PathPrefix</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Name" Description="The base name of the log file." />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>VideoData_Camera1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="aeon:StripSubstring">
                      <aeon:Separator>_</aeon:Separator>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Extension" Description="The file extension" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>csv</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\{1}\{2}.{3}</Format>
                    <Selector>Item1,Item2,Item3,Item4</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="8" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="3" To="8" Label="Source3" />
                  <Edge From="4" To="8" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source4" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName />
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
              <io:Selector>Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp,Value.ChunkData.ExposureTime,Value.ChunkData.Gain</io:Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.Image</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Data</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key</Selector>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>FormatFileName</Name>
              <Description>Generates a log filename based on the input timestamp.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PathPrefix</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Name" Description="The base name of the log file." />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>VideoData_Camera1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="aeon:StripSubstring">
                      <aeon:Separator>_</aeon:Separator>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Extension" Description="The file extension" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>avi</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\{1}\{2}.{3}</Format>
                    <Selector>Item1,Item2,Item3,Item4</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="8" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="3" To="8" Label="Source3" />
                  <Edge From="4" To="8" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source4" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FrameRate" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName />
                <cv:Suffix>None</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>50</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="9" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="6" To="13" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="16" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="16" Label="Source2" />
            <Edge From="15" To="16" Label="Source3" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Switch" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>