<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FunctionGenerator">
          <dsp:BufferLength>441</dsp:BufferLength>
          <dsp:Frequency>10000</dsp:Frequency>
          <dsp:Waveform>Sine</dsp:Waveform>
          <dsp:SampleRate>10000</dsp:SampleRate>
          <dsp:Amplitude>1</dsp:Amplitude>
          <dsp:Offset>0</dsp:Offset>
          <dsp:Phase>0</dsp:Phase>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:AnalogOutput">
          <mx:SignalSource />
          <mx:SampleRate>5000</mx:SampleRate>
          <mx:ActiveEdge>Rising</mx:ActiveEdge>
          <mx:SampleMode>ContinuousSamples</mx:SampleMode>
          <mx:BufferSize>1000</mx:BufferSize>
          <mx:Channels>
            <mx:AnalogOutputChannelConfiguration>
              <mx:ChannelName />
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ao0</mx:PhysicalChannel>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogOutputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:AnalogOutput">
          <mx:SignalSource />
          <mx:SampleRate>5000</mx:SampleRate>
          <mx:ActiveEdge>Rising</mx:ActiveEdge>
          <mx:SampleMode>ContinuousSamples</mx:SampleMode>
          <mx:BufferSize>1000</mx:BufferSize>
          <mx:Channels>
            <mx:AnalogOutputChannelConfiguration>
              <mx:ChannelName />
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ao1</mx:PhysicalChannel>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogOutputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>