<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Text><![CDATA[Creates the main display window for visual stimulus presentation]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>600</gl:Width>
          <gl:Height>400</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>false</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Hidden</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Second</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Text><![CDATA[Loads core BonVision rendering resources ]]></Text>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Annotation">
        <Text><![CDATA[Creates and manages GPU shader program resources to be loaded in for rendering]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:ShaderResources">
          <gl:Shaders />
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Text><![CDATA[Creates and manages 3D mesh geometry for stimulus shape resources to be loaded in for rendering]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:MeshResources">
          <gl:Meshes />
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Text><![CDATA[Creates and manages texture resources to be loaded in for rendering for more complex visual patterns]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:TextureResources">
          <gl:Textures />
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Text><![CDATA[Finalises recourse loading and prepares rendering content]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Text><![CDATA[Executes main rendering loop for frame generation]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Text><![CDATA[Sets up notmalised coordinate system for stimulus positioning]]></Text>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="Annotation">
        <Text><![CDATA[Creates a subject for publishing rendering commands to other places in the workflow]]></Text>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Text><![CDATA[Subscribes to rendering commands from other places in the workflow]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Text><![CDATA[Renders grating stimuli based on set parameters]]></Text>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
        <LocationX>0.0174524058</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <ExtentX>1</ExtentX>
        <ExtentY>1</ExtentY>
        <SpatialFrequency>20</SpatialFrequency>
        <TemporalFrequency>0</TemporalFrequency>
        <Phase>0</Phase>
        <Angle>0</Angle>
        <SquareWave>false</SquareWave>
        <Contrast>0.2</Contrast>
        <DutyCycle xsi:nil="true" />
        <Radius>10</Radius>
        <Aperture>1</Aperture>
        <Opacity>1</Opacity>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="7" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="15" To="17" Label="Source1" />
      <Edge From="16" To="17" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="21" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>