<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="EventsSubjectName" Description="The name of the output &quot;Events&quot; Subject" Category="Subjects" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>BehaviorBoardEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateOutputClearPayload">
          <beh:OutputClear>DO0 DO1 DO2</beh:OutputClear>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="CommandsSubjectName" Description="The name of the input &quot;commands&quot; Subject" Category="Subjects" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehaviorBoardCommands</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="OutputPulseEnable" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>EnablePulses</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="OutputPulseEnable" />
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputPulseEnablePayload">
                <beh:OutputPulseEnable>DO0 DO1 DO2</beh:OutputPulseEnable>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorBoardCommands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PulseDO0" />
        <Property Name="PulseDO1" />
        <Property Name="PulseDO2" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>PulseWidths</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PulseDO0" />
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreatePulseDO0Payload">
                <beh:PulseDO0>33</beh:PulseDO0>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorBoardCommands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PulseDO1" />
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreatePulseDO1Payload">
                <beh:PulseDO1>33</beh:PulseDO1>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorBoardCommands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PulseDO2" />
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreatePulseDO2Payload">
                <beh:PulseDO2>33</beh:PulseDO2>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorBoardCommands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="TriggerValveSubjectName" Description="The name of the subject carrying valve trigger from the main workflow. Integer values (0-2) should be used to trigger individual ports." Category="Subjects" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Int32">
        <rx:Name>TriggerValve</rx:Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateOutputSetPayload">
          <beh:OutputSet>DO0</beh:OutputSet>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehaviorBoardCommands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TriggerValve</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateOutputSetPayload">
          <beh:OutputSet>DO1</beh:OutputSet>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehaviorBoardCommands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TriggerValve</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateOutputSetPayload">
          <beh:OutputSet>DO2</beh:OutputSet>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehaviorBoardCommands</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>