<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Object">
        <rx:Name>StartCameras</rx:Name>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateStartCamerasPayload">
          <beh:StartCameras>CameraOutput0</beh:StartCameras>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Object">
        <rx:Name>StopCameras</rx:Name>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateStopCamerasPayload">
          <beh:StopCameras>CameraOutput0</beh:StopCameras>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="TriggerFrequency" Description="The frequency at which to trigger global cameras." />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>50</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>TriggerFrequency</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Camera0Frequency" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateCamera0FrequencyPayload">
          <beh:Camera0Frequency>1</beh:Camera0Frequency>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="BehaviorCommandsSubjectName" Description="The name of the commands subject for the behavior board that triggers camera frames" Category="Subjects" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehaviorCommands</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="BehaviorEventsSubjectName" Description="The name of the subject carrying events from the behavior board that triggers camera frames" Category="Subjects" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>BehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="SubscribeSubject">
        <Name>BehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="beh:Parse">
        <harp:Register xsi:type="beh:TimestampedCamera0Frame" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="CameraTriggerEventsSubjectName" Description="The name of the subject to which timestamped camera trigger events from the behavior board are published" Category="Subjects" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>CameraTriggerEvents</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="9" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="9" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source3" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="15" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="12" To="17" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="20" Label="Source1" />
      <Edge From="19" To="20" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>