<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateEncoderResetPayload">
          <beh:EncoderReset>EncoderPort2</beh:EncoderReset>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateEnableEncodersPayload">
          <beh:EnableEncoders>EncoderPort2</beh:EnableEncoders>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="CommandsSubjectName" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>DeviceCommands</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="EventsSubjectName" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DeviceEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DeviceEvents</Name>
      </Expression>
      <Expression xsi:type="beh:Parse">
        <harp:Register xsi:type="beh:AnalogData" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Encoder</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>@returns(int)
def process(value):
  CAPACITY = 2**16
  MAX = CAPACITY/2
  MIN = -CAPACITY/2
  if value &gt; MAX:
    value -= CAPACITY
  elif value &lt; MIN:
    value += CAPACITY
  return value</ipy:Script>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="CountsPerRev" />
        <Property Name="WheelDiameter_mm" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TicksToCentimeters</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>-3440</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="CountsPerRev" />
            </Expression>
            <Expression xsi:type="Divide">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int16">
                <Value>4096</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="WheelDiameter_mm" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>170</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>(it*Math.Pi)/10</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="FloatProperty">
                <Value>53.407074</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="9" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>WheelDistance_cm</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="7" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="5" To="8" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>